# Generated by hecTool
i:Ts/NumberOfThreads = 24
i:Ph/Default/Seed = 1
sv:Ph/Default/Modules = 1 "g4em-standard_opt0"

# World Setup
s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX = 1.0 m
d:Ge/World/HLY = 1.0 m
d:Ge/World/HLZ = 1.0 m

d:Tf/TimelineStart = 0. s
d:Tf/TimelineEnd = 1.0 s
i:Tf/NumberOfSequentialTimes = 1

# Geometry Setup
s:Ge/Patient/Type = "TsDicomPatient"
s:Ge/Patient/Parent = "World"
b:Ge/Patient/PreLoadAllMaterials = "True"
d:Ge/Patient/TransX = 0.0 mm
d:Ge/Patient/TransY = 0.0 mm
d:Ge/Patient/TransZ = 150.0 mm
d:Ge/Patient/RotX   = 0.0 deg
d:Ge/Patient/RotY   = 0.0 deg
d:Ge/Patient/RotZ   = 0.0 deg
s:Ge/Patient/DicomDirectory = "/mnt/e/Christoph/EIT/CT/p107/MP1_ph0_masked"
b:Ge/Patient/Invisible  = "False"
iv:Ge/Patient/ShowSpecificSlicesX = 1 -1 # means only show center slice
iv:Ge/Patient/ShowSpecificSlicesY = 1 -1 # means only show center slice
iv:Ge/Patient/ShowSpecificSlicesZ = 1 -1 # means only show center slice

s:Ge/Patient/DicomRTStructFile = "/mnt/e/Christoph/EIT/CT/p107/MP1_ph0_masked/patched_for_weasis/RS_patched_to_converted_CT.dcm"
b:Ge/Patient/IgnoreInconsistentFrameOfReferenceUID = "True"
sv:Ge/Patient/ColorByRTStructNames = 1 "PTV_0"
sv:Ge/Patient/ColorByRTStructColors = 1 "red"

includeFile = particle_sources.txt
includeFile = scoring_current.txt
includeFile = HUtoMaterialSchneider.txt

# --- simple 3D viewer ------------
b:Ts/UseQt              = "True"
s:Gr/View/Type          = "OpenGL"
b:Gr/View/Active        = "True"
i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 100000000
b:Gr/View/HiddenLineRemovalForTrajectories = "True"
b:Gr/View/IncludeAxes   = "True"  # defaults to "False"
s:Gr/View/AxesComponent = "World"  # Component in which to center the axes. Defaults to World.
d:Gr/View/AxesSize      = 0.2 m  # size of axes
